CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:\x5B'Load corrected images for cell body segmentation.'\x5D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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:\x5B'Extract plate, well, site, and channel from corrected image filenames.'\x5D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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.+)_(?P<Well>[A-Z]\d{2})_s(?P<Site>\d+)_Corr(?P<Channel>.+)\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:\x5B'Load DNA and AGP channels for cell body segmentation.'\x5D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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DNA")
    Name to assign these images:CorrDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "AGP")
    Name to assign these images:CorrAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:\x5B'Group by plate.'\x5D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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

IdentifyPrimaryObjects:[module_num:5|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notes:\x5B'Identify nuclei from DNA channel as seeds for cell body segmentation.'\x5D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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:\x5B'Identify cell bodies using AGP channel (actin/membrane) seeded from nuclei.'\x5D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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrAGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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notes:\x5B'Identify cytoplasm as cell body minus nucleus.'\x5D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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExportToSpreadsheet:[module_num:8|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notes:\x5B'Export cell centroid coordinates and object relationships.'\x5D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
    Select the column delimiter:Comma (",")
    Add a prefix to file names?:Yes
    Filename prefix:Cells_
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Press button to select measurements:Cells\x7CLocation_Center_X,Cells\x7CLocation_Center_Y,Cells\x7CNumber_Object_Number,FilteredNuclei\x7CLocation_Center_X,FilteredNuclei\x7CLocation_Center_Y
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Cells_
    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Output file location:Default Output Folder\x7C
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
