CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:\x5B'Load raw images for correction.'\x5D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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:\x5B'Extract plate, well, site, and channel from filenames.'\x5D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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.+)_(?P<Well>[A-Z]\d{2})_s(?P<Site>\d+)_(?P<Channel>.+)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:\x5B'Assign channel names based on extracted metadata.'\x5D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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "RNA")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "ER")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "AGP")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Mito")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:\x5B'Group by plate.'\x5D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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationApply:[module_num:5|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notes:\x5B'Apply illumination correction to DNA channel using division method.'\x5D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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:6|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notes:\x5B'Apply illumination correction to RNA channel using division method.'\x5D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
    Select the input image:RNA
    Name the output image:CorrRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:7|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notes:\x5B'Apply illumination correction to ER channel using division method.'\x5D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
    Select the input image:ER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:8|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notes:\x5B'Apply illumination correction to AGP channel using division method.'\x5D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
    Select the input image:AGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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notes:\x5B'Apply illumination correction to Mito channel using division method.'\x5D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
    Select the input image:Mito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:10|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notes:\x5B'Save corrected DNA image as 16-bit PNG.'\x5D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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CorrDNA
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the database?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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notes:\x5B'Save corrected RNA image as 16-bit PNG.'\x5D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
    Select the type of image to save:Image
    Select the image to save:CorrRNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:RNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CorrRNA
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the database?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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notes:\x5B'Save corrected ER image as 16-bit PNG.'\x5D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
    Select the type of image to save:Image
    Select the image to save:CorrER
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CorrER
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the database?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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notes:\x5B'Save corrected AGP image as 16-bit PNG.'\x5D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
    Select the type of image to save:Image
    Select the image to save:CorrAGP
    Select method for constructing file names:From image filename
    Select image name for file prefix:AGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CorrAGP
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the database?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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notes:\x5B'Save corrected Mito image as 16-bit PNG.'\x5D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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CorrMito
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the database?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
