CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:\x5B'Load all images from the input directory.'\x5D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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:\x5B'Extract plate, well, site, and channel from filenames.'\x5D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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.+)_(?P<Well>[A-Z]\d{2})_s(?P<Site>\d+)_(?P<Channel>.+)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:\x5B'Assign channel names based on extracted metadata.'\x5D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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "RNA")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "ER")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "AGP")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Mito")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:\x5B'Group by plate for per-plate illumination calculation.'\x5D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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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notes:\x5B'Calculate illumination function for DNA channel.'\x5D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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:\x5B'Calculate illumination function for RNA channel.'\x5D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
    Select the input image:RNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:\x5B'Calculate illumination function for ER channel.'\x5D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
    Select the input image:ER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:\x5B'Calculate illumination function for AGP channel.'\x5D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
    Select the input image:AGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:\x5B'Calculate illumination function for Mito channel.'\x5D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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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