CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:\x5B'Load corrected images from illumination correction output.'\x5D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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:\x5B'Extract plate, well, site, and channel from corrected image filenames.'\x5D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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.+)_(?P<Well>[A-Z]\d{2})_s(?P<Site>\d+)_Corr(?P<Channel>.+)\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:\x5B'Load only the DNA channel for segmentation.'\x5D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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DNA")
    Name to assign these images:CorrDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:\x5B'Group by plate and well for per-site processing.'\x5D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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

IdentifyPrimaryObjects:[module_num:5|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notes:\x5B'Identify nuclei in the DNA channel. Diameter range and threshold method should be validated per cell line before batch deployment.'\x5D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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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notes:\x5B'Measure intensity for QC purposes.'\x5D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
    Select images to measure:CorrDNA
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:7|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notes:\x5B'Export nucleus centroid coordinates as CSV. Column names match DeepProfiler expectations.'\x5D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
    Select the column delimiter:Comma (",")
    Add a prefix to file names?:Yes
    Filename prefix:Nuclei_
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Press button to select measurements:Nuclei\x7CLocation_Center_X,Nuclei\x7CLocation_Center_Y,Nuclei\x7CNumber_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Nuclei_
    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Output file location:Default Output Folder\x7C
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
